'==================================================================
' AQUISICAO DE CALIBRACAO - CR1000Xe  (v4 - 28/10/2026)
' Balanca MK30K1 + Termopar tipo T + Pluviometro de contato seco
' + Medidor de vazao Siemens SITRANS FM MAG 5000 (4-20 mA E pulsos)
'
' Base: Pluviometria_v3_com_vazao_4-20mA.CR1X (programa em uso).
' Balanca, termopar e pluviometro estao IDENTICOS a v3. O que muda:
'   1. Canal de pulsos do medidor de vazao em P2 (novo).
'   2. Flow_Status = 3 quando a corrente vem NAN (na v3 uma leitura NAN
'      saia com Flow_Status = 0, porque NAN < 4 e NAN > 20 sao falsos).
'
' BALANCA:
'   ComC5 / C5-C6
'   TX balanca -> C6 (RX datalogger)
'   RX balanca -> C5 (TX datalogger)
'   GND -> G
'
' TERMOPAR:
'   Tipo T, canal diferencial 1H/1L
'   1H = positivo; 1L = negativo
'
' PLUVIOMETRO:
'   Contato seco entre P1 e G
'   PConfig = 1 (Switch Closure with pull-up)
'   Resolucao configurada: 0,2 mm/basculada
'   Confirmar a resolucao real do sensor.
'
' MEDIDOR DE VAZAO - OS DOIS CANAIS SAO MEDIDOS EM TODO SCAN:
'   Analogico 4-20 mA: entrada de corrente nativa RG1, CurrentSE() (igual a v3).
'     Flow_mA = corrente medida em mA.
'     Flow_mV = Flow_mA x 10 (derivado, so compatibilidade; nao e medicao).
'     Flow_Status: 0 = 4 a 20 mA | 1 = abaixo de 4 mA | 2 = acima de 20 mA
'                  | 3 = sem leitura (NAN)
'   Pulsos: P2, PulseCount() em alta frequencia, contagem por Scan.
'     Flow_Pulsos    = pulsos contados desde o Scan anterior (janela de
'                      contagem = intervalo real entre dois Scans, 1 s
'                      nominal; NAO e frequencia).
'     Flow_PulsosTot = contador acumulado (Long) desde o inicio do programa;
'                      soma so as contagens validas; volta a 0 ao reiniciar
'                      o programa ou ao passar de 2.000.000.000.
'     Flow_PStatus: 0 = ok | 1 = primeiro Scan (janela incompleta)
'                  | 2 = contador saturado | 3 = acima de Flow_PulsoMax_Hz
'                  | 4 = sem leitura (NAN)
'     So contagens com Flow_PStatus = 0 entram em Flow_PulsosTot.
'   Flow_mode = 2 sempre: mantido so para o servidor anterior continuar
'     funcionando com este programa. O METODO usado no calculo da vazao
'     (analogico ou pulsos) e escolhido no SERVIDOR (interface, card de
'     Vazao). Trocar o metodo NAO exige alterar nem escrever no datalogger.
'   Fator K, faixa 4-20 mA e unidades ficam no servidor (uma so conversao).
'
' LIGACAO DOS PULSOS - NAO VALIDADA. CONFIRMAR ANTES DE LIGAR:
'   - Saida digital do MAG 5000 no modo PASSIVO (3-30 V DC, carga de
'     200 ohm a 10 kohm, max. 110 mA). O modo ATIVO fornece 24 V DC e
'     excede o maximo de +-20 V das entradas de pulso do CR1000Xe.
'   - Resistor de pull-up EXTERNO dentro da faixa de carga do MAG (ex.: 1 a
'     4,7 kohm para o terminal 5V do CR1000Xe). O pull-up interno de 100 kohm
'     fica fora da faixa de carga exigida pela saida passiva.
'   - Comum da saida digital ligado ao G do CR1000Xe (as saidas do MAG sao
'     galvanicamente isoladas).
'   - Terminais da saida digital no MAG 5000: 56/57/58 segundo o manual;
'     confirmar a funcao de cada um no diagrama da sua unidade.
'   - Frequencia maxima do MAG 5000: 10 kHz. P2 em alta frequencia: 250 kHz.
'   - O corte de vazao baixa do MAG (0 a 9,9 % de Qmax) zera TODAS as saidas.
'
' v3 (22/10/2026): sinal negativo lido do 1o caractere da linha (SplitStr
'   ignora o "-" quando ha espacos entre o sinal e o numero).
' v2 (22/10/2026): o laco da balanca esvazia o buffer serial a cada Scan
'   (ate 100 linhas) e usa a ULTIMA linha completa. Antes lia no maximo 8
'   linhas/Scan: com a balanca transmitindo mais que isso, o buffer de
'   1000 bytes enchia e a massa exibida ficava segundos atrasada.
'   NBufIni = bytes pendentes no inicio do Scan (diagnostico: deve ficar
'   perto de 0 em regime).
'
' IMPORTANTE:
'   Sem dados simulados.
'   Falhas de leitura da balanca nao reutilizam valores anteriores.
'   Total do pluviometro reinicia quando o programa reinicia.
'   Vaisala removida deste programa.
'==================================================================

Const SerFmtBal = 3

Const PesoMin = -100
Const PesoMax = 31000
Const MsgLenMin = 8

Const Pluvio_mmPorBasculada = 0.2

' Faixa nominal da saida analogica do medidor de vazao
Const Flow_Min_mA = 4.0
Const Flow_Max_mA = 20.0

' Canal de pulsos do medidor de vazao (P2)
' PConfig 3 = alta frequencia com pull-up (confirmar com a ligacao real)
Const Flow_PConfig = 3
' Intervalo do Scan em segundos: mantenha igual ao Scan(1,Sec,0,0)
Const ScanSeg = 1
' Acima disto e impossivel para o MAG 5000 (max. 10 kHz): ruido ou ligacao
Const Flow_PulsoMax_Hz = 12000
' Contador de 24 bits do PulseCount: valor maximo por Scan
Const Flow_PulsoSat = 16777215
' O acumulado volta a 0 antes de estourar o Long
Const Flow_TotMax = 2000000000

'-------------------------
' Variaveis da balanca
'-------------------------
Public Peso_g As Float
Public StatusBal As Long
Public LinhaNova As Boolean
Public LastLine As String * 60
Public RxLine As String * 60
Public NumLido(3) As Float
Public FatorG As Float
Public BaudSel As Long
Public BaudInUse As Long
Public NBuf As Long
Public NBufIni As Long
Public TotalOK As Long
Public TotalFalha As Long
Public FalhasSeguidas As Long
Public Alarm_Balanca As Boolean

'-------------------------
' Variaveis do termopar
'-------------------------
Public PTemp_C As Float
Public TempAgua_C As Float

'-------------------------
' Variaveis do pluviometro
'-------------------------
Public Pluvio_Basculadas_1s As Float
Public Pluvio_Total As Float
Public Pluvio_Chuva_mm As Float

'-------------------------
' Variaveis do medidor de vazao
'-------------------------
Public Flow_mA As Float
Public Flow_mV As Float
Public Flow_Status As Long
Public Flow_mode As Long
Public Flow_Pulsos As Float
Public Flow_PulsosTot As Long
Public Flow_PStatus As Long

'-------------------------
' Variaveis internas
'-------------------------
Dim BytesVistos As Boolean
Dim TemDigito As Boolean
Dim Flow_Primeira As Boolean
Dim i As Long
Dim k As Long
Dim b As Long

'==================================================================
' TABELA DA BALANCA
'==================================================================
DataTable(Balanca1s,True,20000)
  Sample(1,Peso_g,IEEE4)
  Sample(1,StatusBal,Long)
  Sample(1,LinhaNova,Boolean)
  Sample(1,BaudInUse,Long)
  Sample(1,LastLine,String)
EndTable

'==================================================================
' RESUMO DA BALANCA
'==================================================================
DataTable(Resumo,True,1440)
  DataInterval(0,1,Min,10)
  Sample(1,TotalOK,Long)
  Sample(1,TotalFalha,Long)
  Sample(1,FalhasSeguidas,Long)
EndTable

'==================================================================
' TABELA DO TERMOPAR
'==================================================================
DataTable(Termopar1s,True,20000)
  Sample(1,TempAgua_C,IEEE4)
  Sample(1,PTemp_C,IEEE4)
EndTable

'==================================================================
' TABELA DO PLUVIOMETRO
'==================================================================
DataTable(Pluviometro1s,True,20000)
  DataInterval(0,1,Sec,10)
  Sample(1,Pluvio_Basculadas_1s,IEEE4)
  Sample(1,Pluvio_Total,IEEE4)
  Sample(1,Pluvio_Chuva_mm,IEEE4)
EndTable

'==================================================================
' TABELA DO MEDIDOR DE VAZAO (os 4 primeiros campos iguais a v3)
'==================================================================
DataTable(Vazao1s,True,20000)
  DataInterval(0,1,Sec,10)
  Sample(1,Flow_mV,IEEE4)
  Sample(1,Flow_mA,IEEE4)
  Sample(1,Flow_Status,Long)
  Sample(1,Flow_mode,Long)
  Sample(1,Flow_Pulsos,IEEE4)
  Sample(1,Flow_PulsosTot,Long)
  Sample(1,Flow_PStatus,Long)
EndTable

'==================================================================
' PROGRAMA PRINCIPAL
'==================================================================
BeginProg

  '--------------------------------------------------------------
  ' Configuracao da balanca
  '--------------------------------------------------------------
  BaudSel = 9600
  FatorG = 1
  BaudInUse = BaudSel

  SerialOpen(ComC5,BaudSel,SerFmtBal,0,1000,0)
  SerialFlush(ComC5)

  '--------------------------------------------------------------
  ' Inicializacao das variaveis
  '--------------------------------------------------------------
  Peso_g = NAN
  TempAgua_C = NAN
  PTemp_C = NAN
  Flow_mA = NAN
  Flow_mV = NAN
  Flow_Status = 3
  Flow_mode = 2
  Flow_Pulsos = NAN
  Flow_PulsosTot = 0
  Flow_PStatus = 1
  Flow_Primeira = True

  Pluvio_Basculadas_1s = 0
  Pluvio_Total = 0
  Pluvio_Chuva_mm = 0

  TotalOK = 0
  TotalFalha = 0
  FalhasSeguidas = 0
  Alarm_Balanca = False

  Scan(1,Sec,0,0)

    '============================================================
    ' TERMOPAR T - CANAL DIFERENCIAL 1
    '============================================================
    PanelTemp(PTemp_C,4000)

    TCDiff(TempAgua_C,1,mV200C,1,TypeT,PTemp_C,True,0,60,1,0)

    '============================================================
    ' MEDIDOR DE VAZAO - CANAL ANALOGICO 4-20 mA EM RG1
    ' CurrentSE retorna a corrente diretamente em mA.
    ' RG1/RG2 sao entradas de corrente dedicadas do CR1000Xe.
    ' Flow_mV e derivado da queda na resistencia interna de 10 ohms
    ' para compatibilidade com perfis antigos; nao usar como sinal
    ' independente do sensor.
    '============================================================
    Flow_mode = 2
    CurrentSE(Flow_mA,1,mV200,RG1,True,0,60,1,0)
    Flow_mV = Flow_mA * 10

    If Flow_mA = NAN Then
      Flow_Status = 3
    ElseIf Flow_mA < Flow_Min_mA Then
      Flow_Status = 1
    ElseIf Flow_mA > Flow_Max_mA Then
      Flow_Status = 2
    Else
      Flow_Status = 0
    EndIf

    '============================================================
    ' MEDIDOR DE VAZAO - CANAL DE PULSOS EM P2
    ' PulseCount roda em TODO Scan (nao pode ficar dentro de If ou
    ' sub-rotina). POption 0 = contagem: o contador de hardware conta
    ' entre duas execucoes, sem perder pulsos; se um Scan for pulado,
    ' a contagem seguinte inclui o intervalo inteiro.
    ' Sem sinal ligado, a contagem e 0 (nao da para distinguir "sem
    ' vazao" de "cabo solto" so pela contagem: o servidor compara com
    ' o canal analogico).
    '============================================================
    PulseCount(Flow_Pulsos,1,P2,Flow_PConfig,0,1,0)

    If Flow_Primeira = True Then
      ' a 1a execucao so arma o contador: janela incompleta
      Flow_PStatus = 1
      Flow_Primeira = False
    ElseIf Flow_Pulsos = NAN Then
      ' sem leitura: nunca somar NAN ao acumulado (Long)
      Flow_PStatus = 4
    ElseIf Flow_Pulsos >= Flow_PulsoSat Then
      Flow_PStatus = 2
    ElseIf Flow_Pulsos > Flow_PulsoMax_Hz * ScanSeg Then
      Flow_PStatus = 3
    Else
      Flow_PStatus = 0
      Flow_PulsosTot = Flow_PulsosTot + Flow_Pulsos
      If Flow_PulsosTot > Flow_TotMax Then
        Flow_PulsosTot = 0
      EndIf
    EndIf

    '============================================================
    ' PLUVIOMETRO - CONTATO SECO P1/G
    '============================================================
    PulseCount(Pluvio_Basculadas_1s,1,P1,1,0,1,0)

    Pluvio_Total = Pluvio_Total + Pluvio_Basculadas_1s

    Pluvio_Chuva_mm = Pluvio_Total * Pluvio_mmPorBasculada

    '============================================================
    ' BALANCA - AQUISICAO SERIAL
    '============================================================
    LinhaNova = False
    BytesVistos = False
    Peso_g = NAN
    LastLine = ""
    StatusBal = 1

    If BaudSel <> BaudInUse Then

      If BaudSel = 1200 OR BaudSel = 2400 OR BaudSel = 4800 OR BaudSel = 9600 OR BaudSel = 19200 OR BaudSel = 38400 OR BaudSel = 57600 OR BaudSel = 115200 Then

        SerialClose(ComC5)
        SerialOpen(ComC5,BaudSel,SerFmtBal,0,1000,0)
        SerialFlush(ComC5)
        BaudInUse = BaudSel

      Else
        BaudSel = BaudInUse
      EndIf

    EndIf

    NBufIni = SerialInChk(ComC5)

    For k = 1 To 100

      NBuf = SerialInChk(ComC5)

      If NBuf = 0 Then
        ExitFor
      EndIf

      BytesVistos = True
      RxLine = ""

      SerialIn(RxLine,ComC5,10,CHR(10),60)

      If Right(RxLine,1) = CHR(10) Then
        LastLine = RxLine
        LinhaNova = True
      EndIf

    Next k

    If BytesVistos = False Then

      StatusBal = 1

    ElseIf LinhaNova = False Then

      StatusBal = 2

    Else

      TemDigito = False

      For i = 1 To Len(LastLine)

        b = ASCII(Mid(LastLine,i,1))

        If b >= 48 AND b <= 57 Then
          TemDigito = True
        EndIf

      Next i

      If Len(LastLine) < MsgLenMin OR TemDigito = False Then

        StatusBal = 3

      Else

        NumLido(1) = NAN
        NumLido(2) = NAN
        NumLido(3) = NAN

        ' Extracao experimental: validar com mensagem real
        ' da MK30K1.
        SplitStr(NumLido(1),LastLine,"",3,0)

        ' A MK30K1 envia o sinal separado do numero por espacos ("-   4.5g"):
        ' SplitStr devolve 4.5 sem o sinal. O sinal e lido do 1o caractere.
        If Left(LastLine,1) = "-" Then
          Peso_g = -1 * ABS(NumLido(1)) * FatorG
        Else
          Peso_g = NumLido(1) * FatorG
        EndIf

        If Peso_g = NAN Then

          StatusBal = 3

        ElseIf Peso_g < PesoMin OR Peso_g > PesoMax Then

          Peso_g = NAN
          StatusBal = 4

        Else

          StatusBal = 0

        EndIf

      EndIf

    EndIf

    If StatusBal = 0 Then

      TotalOK = TotalOK + 1
      FalhasSeguidas = 0
      Alarm_Balanca = False

    Else

      TotalFalha = TotalFalha + 1
      FalhasSeguidas = FalhasSeguidas + 1

      If FalhasSeguidas > 5 Then
        Alarm_Balanca = True
      EndIf

    EndIf

    '============================================================
    ' REGISTRO DOS DADOS
    '============================================================
    CallTable Balanca1s
    CallTable Resumo
    CallTable Termopar1s
    CallTable Pluviometro1s
    CallTable Vazao1s

  NextScan

EndProg
